CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^iPSC-WiCell-CellPainting_(?P<PositionX>[A-G]{1})(?P<PositionY>[0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<Wavelength>[0-9]{1,2}).TIFF
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "iPSC-WiCell-CellPainting")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^W(?P<wavelength>[0-5]{1})illum.pny
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "npy")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:5
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w5.TIFF")
    Name to assign these images:W5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1.TIFF")
    Name to assign these images:W1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2.TIFF")
    Name to assign these images:W2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3.TIFF")
    Name to assign these images:W3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w4.TIFF")
    Name to assign these images:W4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/xinli/Desktop/Work/Photos/W1illlum.npy   
    Name to assign this image:IlluminationW1
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    Select the image type:Illumination function
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    Single image location:file:///C:/Users/xinli/Desktop/Work/Photos/W2illum.npy   
    Name to assign this image:IlluminationW2
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    Select the image type:Illumination function
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    Single image location:file:///C:/Users/xinli/Desktop/Work/Photos/W3illum.npy   
    Name to assign this image:IlluminationW3
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    Select the image type:Illumination function
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    Single image location:file:///C:/Users/xinli/Desktop/Work/Photos/W4illum.npy   
    Name to assign this image:IlluminationW4
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    Select the image type:Illumination function
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    Single image location:file:///C:/Users/xinli/Desktop/Work/Photos/W5illum.npy   
    Name to assign this image:IlluminationW5
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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enabled:False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
    Select the input image:W1
    Name the output image:WC
    Select the illumination function:IlluminationW1
    Select how the illumination function is applied:Divide
    Select the input image:W2
    Name the output image:WC
    Select the illumination function:IlluminationW2
    Select how the illumination function is applied:Divide
    Select the input image:W3
    Name the output image:WC
    Select the illumination function:IlluminationW3
    Select how the illumination function is applied:Subtract
    Select the input image:W4
    Name the output image:WC
    Select the illumination function:IlluminationW4
    Select how the illumination function is applied:Divide
    Select the input image:IlluminationW5
    Name the output image:WC
    Select the illumination function:IlluminationW5
    Select how the illumination function is applied:Divide

MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:W5
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):17,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:8
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.015,1.0
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:W3
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureImageAreaOccupied:[module_num:10|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cytoplasm
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureColocalization:[module_num:12|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
    Hidden:5
    Hidden:3
    Select an image to measure:W1
    Select an image to measure:W2
    Select an image to measure:W4
    Select an image to measure:W3
    Select an image to measure:W5
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:13|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
    Image count:4
    Object count:3
    Select an image to measure:W1
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:2
    Select an image to measure:W2
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Object count:2
    Select an image to measure:W3
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:W4
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

MeasureTexture:[module_num:14|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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:W1
    Select an image to measure:W2
    Select an image to measure:W3
    Select an image to measure:W4
    Select an image to measure:W5
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Measure images or objects?:Objects

MeasureObjectIntensity:[module_num:15|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
    Hidden:5
    Select an image to measure:W1
    Select an image to measure:W2
    Select an image to measure:W3
    Select an image to measure:W4
    Select an image to measure:W5
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells
    Select objects to measure:Nuclei

MeasureObjectIntensityDistribution:[module_num:16|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select an image to measure:W1
    Select an image to measure:W2
    Select an image to measure:W3
    Select an image to measure:W4
    Select an image to measure:W5
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:Yes
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    Name the output image:nucleiOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:nucleiOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:W5
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:22|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enabled:False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
    Database type:MySQL
    Database name:features
    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
    Database host:127.0.0.1
    Username:other
    Password:cardiomyocyte35
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt
    Overwrite existing files without warning?:No
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