CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['W1: mitochondria', 'W2: actin, golgi, plasma membrane', 'W3: nucleoli, cytoplasmic RNA', 'W4: ER', 'W5: nucleus']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w1.TIFF")
    Name to assign these images:W1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2.TIFF")
    Name to assign these images:W2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3.TIFF")
    Name to assign these images:W3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w4.TIFF")
    Name to assign these images:W4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w5.TIFF")
    Name to assign these images:W5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:W1
    Name the output image:IllumC_W1
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:12
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:W2
    Name the output image:IllumC_W2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:12
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:W3
    Name the output image:IllumC_W3
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:12
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:W4
    Name the output image:IllumC_W4
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:12
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:W5
    Name the output image:IllumC_W5
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:12
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:IllumC_W1
    Name the output image:W1Illum
    Select the illumination function:IllumC_W1
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:11|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
    Select the input image:IllumC_W2
    Name the output image:W2Illum
    Select the illumination function:IllumC_W2
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:12|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
    Select the input image:IllumC_W3
    Name the output image:W3Illum
    Select the illumination function:IllumC_W3
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:13|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
    Select the input image:IllumC_W4
    Name the output image:CorrBlue
    Select the illumination function:IllumC_W4
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:14|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
    Select the input image:IllumC_W5
    Name the output image:CorrBlue
    Select the illumination function:IllumC_W5
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:15|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
    Select the input image:IllumC_W1
    Name the output image:W1final
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:16|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
    Select the input image:IllumC_W2
    Name the output image:W2final
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:17|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
    Select the input image:IllumC_W3
    Name the output image:W3final
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:18|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
    Select the input image:IllumC_W4
    Name the output image:W4final
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:19|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
    Select the input image:IllumC_W5
    Name the output image:W5final
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:W1final
    Select method for constructing file names:Single name
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    Enter single file name:W1illlum
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\Photos
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:W2final
    Select method for constructing file names:Single name
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    Enter single file name:W2illum
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\Photos
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:W3final
    Select method for constructing file names:Single name
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    Enter single file name:W3illum
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\Photos
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:W4final
    Select method for constructing file names:Single name
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    Enter single file name:W4illum
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\Photos
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:W5final
    Select method for constructing file names:Single name
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    Enter single file name:W5illum
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\Photos
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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