CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^iPSC-WiCell-CellPainting_(?P<PositionX>[A-G]{1})(?P<PositionY>[0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<Wavelength>[0-9]{1,2}).TIFF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w5")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w4")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:3
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:40
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExportToDatabase:[module_num:7|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_QC
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    Output file location:Elsewhere...|Z:\\
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:run1
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:PositionX
    Select the well metadata:Site
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:IdentifyPrimaryObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:8|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:c:\users\xinli
    Cluster root path:c:\users\xinli
